PsychoPy2experiment version="2026.2.3"
Settings
  Data filename = u'data' + os.sep + '%s_%s' %(expInfo['participant'], expInfo['date'])
  Experiment info = {'age': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextboxComponent stim
      bold = False
      borderColor = $(-1.0000, -1.0000, -1.0000)
      color [set every repeat] = $letterColor
      editable = False
      formattingSyntax = md
      letterHeight = 0.05
      padding = None
      size = (None, None)
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent resp
      allowedKeys = "left","down","right","up"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine instruct
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    KeyboardComponent ready
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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    TextboxComponent instrucText
      bold = False
      color = black
      editable = False
      formattingSyntax = md
      letterHeight = 0.03
      padding = None
      startVal [time (s)] = 0.0
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      text:
        A word will appear on the screen in either red, orange, blue or green text. Your goal is to hit the corresponding arrow keys to the COLOR of the word you see.

        Remeber ignore the word itself, focus on the color of the letters!

            Left for red LETTERS
            Up for Orange LETTERS
            Down for green LETTERS
            Right for blue LETTERS

        Not making sense? Dont worry there is a practice round!

           (Esc will quit)

        Press any key to continue
  Routine thanks
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    TextboxComponent thanksNew
      bold = False
      color = black
      editable = False
      formattingSyntax = md
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine fixation
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    TextComponent fixation_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text = +
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  Routine practice_run_2
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    TextboxComponent stim_2
      bold = False
      borderColor = $(-1.0000, -1.0000, -1.0000)
      color [set every repeat] = $letterColor
      editable = False
      formattingSyntax = md
      letterHeight = 0.05
      padding = None
      size = (None, None)
      startVal [time (s)] = 0
      text [set every repeat] = $word
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    KeyboardComponent resp_2
      allowedKeys = "left","down","right","up"
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine Start
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    TextComponent Ready
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Okay! Now time for the real thing!

        Press any button to continue

        (Esc will quit)
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'word': 'orange', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'green', 'letterColor': 'orange', 'corrAns': 'up', 'congruent': 0},
      {'word': 'orange', 'letterColor': 'orange', 'corrAns': 'up', 'congruent': 1},
      {'word': 'orange', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine fixation
    Routine practice_run_2
  LoopTerminator trials_2
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'word': 'red', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 1},
      {'word': 'red', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 0},
      {'word': 'green', 'letterColor': 'green', 'corrAns': 'down', 'congruent': 1},
      {'word': 'green', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 0},
      {'word': 'blue', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'blue', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0},
      {'word': 'orange', 'letterColor': 'blue', 'corrAns': 'right', 'congruent': 1},
      {'word': 'green', 'letterColor': 'orange', 'corrAns': 'up', 'congruent': 0},
      {'word': 'orange', 'letterColor': 'orange', 'corrAns': 'up', 'congruent': 1},
      {'word': 'orange', 'letterColor': 'red', 'corrAns': 'left', 'congruent': 0}]
    Routine fixation
    Routine trial
  LoopTerminator trials
  Routine thanks
